PsychoPy2experiment version="2025.2.4"
Settings
  Audio lib = ptb
  Experiment info = {'participant': 'f"{randint(0, 999999):06.0f}"', 'session': '001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = (1024, 768)
  color = $(-1.0000, -1.0000, -1.0000)
  expName = ColorChangeTask4
  keyboardBackend = PsychToolbox
  runMode = 0
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Routines
  Routine test
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    PolygonComponent t1
      fillColor [set every repeat] = $tcol1
      lineColor [set every repeat] = $tcol1
      pos = (0.25, 0.25)
      shape = circle
      size = [0.08, 0.08]
      startVal [time (s)] = 0.0
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    PolygonComponent t2
      fillColor [set every repeat] = $tcol2
      lineColor [set every repeat] = $tcol2
      pos = (-0.25, 0.25)
      shape = circle
      size = [0.08, 0.08]
      startVal [time (s)] = 0.0
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    PolygonComponent t3
      fillColor [set every repeat] = $tcol3
      lineColor [set every repeat] = $tcol3
      nVertices = 5
      pos = (-0.25, -0.25)
      shape = circle
      size = [0.08, 0.08]
      startVal [time (s)] = 0.0
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    PolygonComponent t4
      fillColor [set every repeat] = $tcol4
      lineColor [set every repeat] = $tcol4
      nVertices = 6
      pos = (0.25, -0.25)
      shape = circle
      size = [0.08, 0.08]
      startVal [time (s)] = 0.0
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    PolygonComponent t5
      nVertices = 8
      shape = circle
      startVal [time (s)] = 0.0
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    PolygonComponent t6
      shape = circle
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    KeyboardComponent key_resp
      allowedKeys [set every repeat] = 's','d'
      correctAns = $correct
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      storeCorrect = True
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  Routine Fixation
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    TextComponent Fix
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.5
      text = +
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  Routine Study
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    PolygonComponent s1
      fillColor [set every repeat] = $col1
      lineColor [set every repeat] = $col1
      pos = [0.25,0.25]
      shape = circle
      size = [0.08, 0.08]
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.5
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    PolygonComponent s2
      fillColor [set every repeat] = $col2
      lineColor [set every repeat] = $col2
      pos = (-0.25, .25)
      shape = circle
      size = [0.08, 0.08]
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.5
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    PolygonComponent s3
      fillColor [set every repeat] = $col3
      lineColor [set every repeat] = $col3
      nVertices = 5
      pos = (-0.25, -0.25)
      shape = circle
      size = [0.08, 0.08]
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.5
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    PolygonComponent s4
      fillColor [set every repeat] = $col4
      lineColor [set every repeat] = $col4
      nVertices = 6
      pos = (0.25, -0.25)
      shape = circle
      size = [0.08, 0.08]
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.5
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    PolygonComponent s5
      nVertices = 8
      shape = circle
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.5
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    PolygonComponent s6
      shape = circle
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.5
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  Routine Delay
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    TextComponent delaytext
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.5
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  Routine Instructions
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    TextComponent Instruction_text
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        In this task, you will see a set of 4 shapes.

        Each shape will be a different color.

        After a short pause, you will see the shapes again.

        Your job is to decide whether the second display is:

        S = SAME (no colors changed)
        D = DIFFERENT (one color changed)

        Respond as quickly and accurately as possible.

        Press any key to begin.
    KeyboardComponent end_instructions
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine Goodbye
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    TextComponent goodbye_text
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        You have completed the task.

        Thank you for participating!

        Press any key to exit.
    KeyboardComponent end_goodbye
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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Flow
  Routine Instructions
  LoopInitiator trials loopType="TrialHandler"
    conditionsFile = shape_color_change_trials.csv
    loopType = random
    nReps = 1
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    conditions:
      [OrderedDict([('trial', np.int64(1)), ('change', np.int64(1)), ('pos', np.int64(5)), ('correct', 'd'), ('v1', np.int64(64)), ('v2', np.int64(6)), ('v3', np.int64(5)), ('v4', np.int64(8)), ('v5', np.int64(3)), ('v6', np.int64(4)), ('col1', [0.737, 0.741, 0.133]), ('col2', [0.839, 0.153, 0.157]), ('col3', [0.8, 0.8, 0.8]), ('col4', [0.09, 0.745, 0.812]), ('col5', [0.58, 0.404, 0.741]), ('col6', [1.0, 0.498, 0.055]), ('tcol1', [0.737, 0.741, 0.133]), ('tcol2', [0.839, 0.153, 0.157]), ('tcol3', [0.8, 0.8, 0.8]), ('tcol4', [0.09, 0.745, 0.812]), ('tcol5', [0.58, 0.404, 0.741]), ('tcol6', [0.549, 0.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,
      OrderedDict([('trial', np.int64(2)), ('change', np.int64(1)), ('pos', np.int64(4)), ('correct', 'd'), ('v1', np.int64(4)), ('v2', np.int64(64)), ('v3', np.int64(6)), ('v4', np.int64(8)), ('v5', np.int64(3)), ('v6', np.int64(5)), ('col1', [0.173, 0.627, 0.173]), ('col2', [0.549, 0.337, 0.294]), ('col3', [0.58, 0.404, 0.741]), ('col4', [0.122, 0.467, 0.706]), ('col5', [1.0, 0.498, 0.055]), ('col6', [0.737, 0.741, 0.133]), ('tcol1', [0.173, 0.627, 0.173]), ('tcol2', [0.549, 0.337, 0.294]), ('tcol3', [0.58, 0.404, 0.741]), ('tcol4', [0.122, 0.467, 0.706]), ('tcol5', [0.8, 0.8, 0.8]), ('tcol6', [0.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,
      OrderedDict([('trial', np.int64(3)), ('change', np.int64(1)), ('pos', np.int64(3)), ('correct', 'd'), ('v1', np.int64(8)), ('v2', np.int64(4)), ('v3', np.int64(5)), ('v4', np.int64(6)), ('v5', np.int64(64)), ('v6', np.int64(3)), ('col1', [1.0, 0.498, 0.055]), ('col2', [0.58, 0.404, 0.741]), ('col3', [0.839, 0.153, 0.157]), ('col4', [0.737, 0.741, 0.133]), ('col5', [0.8, 0.8, 0.8]), ('col6', [0.122, 0.467, 0.706]), ('tcol1', [1.0, 0.498, 0.055]), ('tcol2', [0.58, 0.404, 0.741]), ('tcol3', [0.839, 0.153, 0.157]), ('tcol4', [0.549, 0.337, 0.294]), ('tcol5', [0.8, 0.8, 0.8]), ('tcol6', [0.122, 0.4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,
      OrderedDict([('trial', np.int64(4)), ('change', np.int64(1)), ('pos', np.int64(1)), ('correct', 'd'), ('v1', np.int64(3)), ('v2', np.int64(6)), ('v3', np.int64(4)), ('v4', np.int64(64)), ('v5', np.int64(5)), ('v6', np.int64(8)), ('col1', [0.8, 0.8, 0.8]), ('col2', [0.839, 0.153, 0.157]), ('col3', [0.122, 0.467, 0.706]), ('col4', [0.737, 0.741, 0.133]), ('col5', [0.549, 0.337, 0.294]), ('col6', [0.58, 0.404, 0.741]), ('tcol1', [0.8, 0.8, 0.8]), ('tcol2', [0.89, 0.467, 0.761]), ('tcol3', [0.122, 0.467, 0.706]), ('tcol4', [0.737, 0.741, 0.133]), ('tcol5', [0.549, 0.337, 0.294]), ('tcol6', [0.58, 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
    Routine Fixation
    Routine Study
    Routine Delay
    Routine test
  LoopTerminator trials
  Routine Goodbye
