PsychoPy2experiment version="2025.2.4"
Settings
  Audio lib = ptb
  Experiment info = {'participant': 'f"{randint(0, 999999):06.0f}"', 'session': '001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = (1024, 768)
  color = $(-1.0000, -1.0000, -1.0000)
  expName = LetterChangeTask4
  keyboardBackend = PsychToolbox
  runMode = 0
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Routines
  Routine trial
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    TextComponent fix
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.5
      text = +
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    TextComponent mem1
      letterHeight = 0.05
      pos = (0.25,0.25)
      startVal [time (s)] = 0.5
      stopVal [duration (s)] = 1.5
      text [set every repeat] = $d1
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    TextComponent blank
      letterHeight = 0.05
      startVal [time (s)] = 2
      stopVal [duration (s)] = 1.5
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    TextComponent probe1
      letterHeight = 0.05
      pos = (0.25,.25)
      startVal [time (s)] = 3.5
      text [set every repeat] = $p1
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    KeyboardComponent response
      allowedKeys = 's','d'
      correctAns = $correct
      forceEndRoutine = True
      startVal [time (s)] = 3.5
      storeCorrect = True
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    CodeComponent code
      Code Type = Auto->JS
    CodeComponent code_2
      Code Type = Auto->JS
    TextComponent mem2
      letterHeight = 0.05
      pos = (-0.25,0.25)
      startVal [time (s)] = 0.5
      stopVal [duration (s)] = 1.5
      text [set every frame] = $d2
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    TextComponent mem3
      letterHeight = 0.05
      pos = (-0.25,-.25)
      startVal [time (s)] = 0.5
      stopVal [duration (s)] = 1.5
      text [set every repeat] = $d3
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    TextComponent mem4
      letterHeight = 0.05
      pos = (0.25,-0.25)
      startVal [time (s)] = 0.5
      stopVal [duration (s)] = 1.5
      text [set every repeat] = $d4
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    TextComponent mem5
      letterHeight = 0.05
      startVal [time (s)] = 0.5
      stopVal [duration (s)] = 1.5
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    TextComponent mem6
      letterHeight = 0.05
      startVal [time (s)] = 0.5
      stopVal [duration (s)] = 1.5
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    TextComponent probe2
      letterHeight = 0.05
      pos = (-0.25,0.25)
      startVal [time (s)] = 3.5
      text [set every repeat] = $p2
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    TextComponent probe3
      letterHeight = 0.05
      pos = (-0.25,-.25)
      startVal [time (s)] = 3.5
      text [set every repeat] = $p3
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    TextComponent probe4
      letterHeight = 0.05
      pos = (0.25,-0.25)
      startVal [time (s)] = 3.5
      text [set every repeat] = $p4
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    TextComponent probe5
      letterHeight = 0.05
      startVal [time (s)] = 3.5
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    TextComponent probe6
      disabled = True
      letterHeight = 0.05
      startVal [time (s)] = 3.5
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  Routine End
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    TextComponent text
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        Thank you for participating!

        Press SPACE to exit.
    KeyboardComponent exitKey
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine Instructions
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    TextComponent instrText
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        In this task, you will see a set of 4 letters on the screen.

        First, memorize the numbers as quickly and accurately as possible.
        After a short delay, you will see another 4 letter set.

        If the second set is EXACTLY the same as the first, press the S key.

        If ONE digit has changed, press the D key.

        Respond as quickly and accurately as you can.

        Press the SPACEBAR to begin.
    KeyboardComponent instrKey
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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Flow
  Routine Instructions
  LoopInitiator trials loopType="TrialHandler"
    conditionsFile = letter_change_trials.csv
    loopType = random
    nReps = 1
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    conditions:
      [OrderedDict([('trial', np.int64(1)), ('mem_text', 'JBKM'), ('probe_text', 'JBKF'), ('d1', 'J'), ('d2', 'B'), ('d3', 'K'), ('d4', 'M'), ('p1', 'J'), ('p2', 'B'), ('p3', 'K'), ('p4', 'F'), ('correct', 'd'), ('change', np.int64(1)), ('pos', np.int64(3))]),
      OrderedDict([('trial', np.int64(2)), ('mem_text', 'MLFG'), ('probe_text', 'MLFG'), ('d1', 'M'), ('d2', 'L'), ('d3', 'F'), ('d4', 'G'), ('p1', 'M'), ('p2', 'L'), ('p3', 'F'), ('p4', 'G'), ('correct', 's'), ('change', np.int64(0)), ('pos', np.int64(-1))]),
      OrderedDict([('trial', np.int64(3)), ('mem_text', 'JKHF'), ('probe_text', 'JKHF'), ('d1', 'J'), ('d2', 'K'), ('d3', 'H'), ('d4', 'F'), ('p1', 'J'), ('p2', 'K'), ('p3', 'H'), ('p4', 'F'), ('correct', 's'), ('change', np.int64(0)), ('pos', np.int64(-1))]),
      OrderedDict([('trial', np.int64(4)), ('mem_text', 'HBMF'), ('probe_text', 'HBMF'), ('d1', 'H'), ('d2', 'B'), ('d3', 'M'), ('d4', 'F'), ('p1', 'H'), ('p2', 'B'), ('p3', 'M'), ('p4', 'F'), ('correct', 's'), ('change', np.int64(0)), ('pos', np.int64(-1))]),
      OrderedDict([('trial', np.int64(5)), ('mem_text', 'MBFH'), ('probe_text', 'MDFH'), ('d1', 'M'), ('d2', 'B'), ('d3', 'F'), ('d4', 'H'), ('p1', 'M'), ('p2', 'D'), ('p3', 'F'), ('p4', 'H'), ('correct', 'd'), ('change', np.int64(1)), ('pos', np.int64(1))])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
    Routine trial
  LoopTerminator trials
  Routine End
